CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:HE
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:HE
    Name the output name:Hematoxylin
    Stain:Hematoxylin
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    Name the output name:Eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:Hematoxylin
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:9|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
    Hidden:1
    Hidden:1
    Hidden:2
    Select an image to measure:Hematoxylin
    Select objects to measure:Nuclei
    Texture scale to measure:4
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:8
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|bei-ROI
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Nuclei|Number_Object_Number,Nuclei|Texture_InfoMeas2_Hematoxylin_4_90,Nuclei|Texture_InfoMeas2_Hematoxylin_4_45,Nuclei|Texture_InfoMeas2_Hematoxylin_4_0,Nuclei|Texture_InfoMeas1_Hematoxylin_4_0,Nuclei|Texture_InfoMeas1_Hematoxylin_4_45,Nuclei|Texture_InfoMeas1_Hematoxylin_4_90,Nuclei|Texture_SumVariance_Hematoxylin_4_0,Nuclei|Texture_SumVariance_Hematoxylin_4_45,Nuclei|Texture_SumVariance_Hematoxylin_4_90,Nuclei|Texture_DifferenceVariance_Hematoxylin_4_90,Nuclei|Texture_DifferenceVariance_Hematoxylin_4_45,Nuclei|Texture_DifferenceVariance_Hematoxylin_4_0,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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